PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=16A7637A
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = expectedness
  keyboardBackend = ioHub
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Routines
  Routine demographics
    ImageComponent logo7
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_4
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHICS
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    TextComponent age
      letterHeight = 0.03
      pos = (-0.3, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your age:
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    TextboxComponent age_enter
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0
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    TextComponent gender
      letterHeight = 0.03
      pos = (-0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your gender:
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    SliderComponent gender_slider
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 1
      labels = "female", "male", "non-binary", "other"
      letterHeight = 0.03
      pos = (0.3, 0.1)
      saveStartStop = False
      size = (0.4, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent native_lang
      letterHeight = 0.03
      pos = (-0.4, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Native language(s) (spoken at home
        when you were a child):
    TextboxComponent lang_enter
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0
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    TextboxComponent finish_comment
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      text = After clicking on "Back to Prolific", you will have to click "ok" one more time in order to be redirected to Prolific.
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    TextboxComponent continue4
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.35,0.04)
      startVal [time (s)] = 0.0
      text = Back to Prolific
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    MouseComponent mouse_3
      clickable = continue4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    ImageComponent logo1
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to our study!
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    TextboxComponent introduction
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, 0.5)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = The goal of this study is to investigate how humans understand English utterances. The study consists of two parts. In both parts, you will read 12  3-sentence statements by different speakers. Here is an example:
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    TextboxComponent introduction_2
      anchor = top-center
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos = (0, 0.18)
      saveStartStop = False
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      text = Phil said: I went shopping last Tuesday. I had a day off from work. I bought lots of beautiful things.
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    TextboxComponent introduction_3
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        In part 1, we are interested in understanding what the speaker might say in the next sentence (e.g., Phil might say next what else he did on his day off). We will make a proposal and ask you to rate how expected that proposal is.

        In part 2, you will see each statement again, but we will show you what the speaker actually said next. Phil, for instance, said next: "My favorite piece was a blue fake leather jacket." We will ask you a question about what the speaker is certain about, e.g., "Is Phil certain that the leather jacket is fake?".

        Each part will start with one practice trial to get you acquainted with the procedure. At the end of the study, we will ask you for your demographic information. Please pay close attention during your participation! The study should take approximately 15 minutes.
    TextboxComponent continue1
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse
      clickable = continue1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent
    ImageComponent logo2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONSENT
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    TextboxComponent consent_text
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.025
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = By clicking on the "I want to participate"-button below you agree to participate in this study, which is conducted by researchers at the University of Stuttgart. You may withdraw from this study at any time without penalty or loss of benefits, including loss or reduction of payment. If you do withdraw from the study before the end, please contact the researchers for information on how to collect payment (swantje.toennis@ling.uni-stuttgart.de). The data collected will be anonymous and confidential. You give permission for your data from this study to be shared with other researchers. If you have any questions, you may contact the requester through Prolific's platform or via email (swantje.toennis@ling.uni-stuttgart.de). 
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    TextboxComponent continue2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.45,0.04)
      startVal [time (s)] = 0.0
      text = I want to participate
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    MouseComponent mouse_consent
      clickable = continue2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block2
    ImageComponent logo5
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 2 of the study!
    TextboxComponent intro_block2
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, -0.15)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read the same statements from the previous part again but with one more sentence. You will evaluate whether the speaker is certain about something.
        Click "Continue" to go through a practice trial.
    TextboxComponent continue6
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_5
      clickable = continue6
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial_certainty
    TextboxComponent read_context
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box.
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    TextboxComponent textbox_4
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.025
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
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    TextboxComponent task1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $target
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    SliderComponent certainty_rate
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("no","yes")
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3_4
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_7
      clickable = continue3_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial_expectedness
    TextboxComponent read_context_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box.
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.025
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
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    TextComponent text2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What do you expect that the next sentence will be about? Rate the following proposal by adjusting the slider.
    TextComponent proposal1
      letterHeight = 0.03
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    SliderComponent exp_rate1
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.19)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_2
      clickable = continue3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block1
    ImageComponent logo3
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 1 of the study!
    TextboxComponent intro_block2_2
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, -0.15)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read statements by different speakers and will indicate what you expect them to say  in the next sentence.
        Click "Continue" to go through a practice trial.
    TextboxComponent continue6_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_9
      clickable = continue6_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_trial1
    ImageComponent logo4
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_3
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRACTICE
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    TextboxComponent read_context_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.32)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box.
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    TextboxComponent textbox_2
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.025
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.17)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text = Julia said: Kim was at the party yesterday. I had a lot of fun with her. But then she suddenly left.
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    TextComponent text2_2
      letterHeight = 0.03
      pos = (0, -0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What do you expect that the next sentence will be about? Rate the following proposal by adjusting the slider.
    TextComponent proposal1_2
      letterHeight = 0.03
      pos = (0,-0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = about why Kim left the party
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    SliderComponent exp_rate1_2
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.19)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.47,0.035)
      startVal [time (s)] = 0.0
      text = Continue to part 1 of the study
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    MouseComponent mouse_4
      clickable = continue3_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_trial2
    ImageComponent logo6
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_5
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRACTICE
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    TextboxComponent read_context_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, 0.29)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box.
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    TextboxComponent textbox_5
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.025
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.17)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text = Julia said: Kim was at the party yesterday. I had a lot of fun with her. But then she suddenly left. I guess she had met a guy.
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    TextboxComponent task1_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, -0.03)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Is Julia certain that Kim met a guy? Please adjust the slider.
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    SliderComponent certainty_rate_2
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("no","yes")
      letterHeight = 0.025
      pos = (0, -0.13)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3_5
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.47,0.035)
      startVal [time (s)] = 0.0
      text = Continue to part 2 of the study
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    MouseComponent mouse_8
      clickable = continue3_5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine consent
  Routine block1
  Routine practice_trial1
  LoopInitiator trials_block1 loopType="TrialHandler"
    conditionsFile = input1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_no': 't12', 'block': 1, 'condition': 'c', 'context': 'Lilly said: Three years ago Joan had a one-night stand with Jack. He disappeared the next morning, so she was never able to contact him and tell him that he had left her pregnant and that he has a child. Last week, Jack suddenly reached out to Joan on Facebook.', 'question': "about what the aftereffect of Jack's encounter with Joan was ", 'list': 3},
      {'item_no': 't15', 'block': 1, 'condition': 'nc', 'context': "Jimmy said: There was a company meeting yesterday. I heard from somebody who attended the meeting that the president started reading the names of all the people in attendance but then he suddenly stopped. We don't know why.", 'question': 'about whether there was a problem with the attendance sheet', 'list': 3},
      {'item_no': 't20', 'block': 1, 'condition': 'c', 'context': "Emma said: One of my friends has a terrible case of halitosis: the stench coming out of his mouth is just horrible. We told him but he still won't brush his teeth. Recently, our teacher won't come close to him anymore. ", 'question': 'about what bothered the teacher', 'list': 3},
      {'item_no': 't23', 'block': 1, 'condition': 'nc', 'context': "Eleanor said: Our company was searching for a new human resources manager. The first resume that arrived was from a really well-qualified guy. We were completely baffled when our CEO immediately rejected him, and she didn't want to tell us why. ", 'question': 'about what was wrong with the guy', 'list': 3}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
    Routine trial_expectedness
  LoopTerminator trials_block1
  Routine block2
  Routine practice_trial2
  LoopInitiator trials_block2 loopType="TrialHandler"
    conditionsFile = input2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_no': 't12', 'block': 2, 'condition': 'c', 'context': "Lilly said: Three years ago Joan had a one-night stand with Jack. He disappeared the next morning, so she was never able to contact him and tell him that he had left her pregnant and that he has a child. Last week, Jack suddenly reached out to Joan on Facebook. Perhaps he discovered that he's a father.", 'target': 'Is Lilly certain that Jack is a father?', 'list': 3},
      {'item_no': 't15', 'block': 2, 'condition': 'nc', 'context': "Jimmy said: There was a company meeting yesterday. I heard from somebody who attended the meeting that the president started reading the names of all the people in attendance but then he suddenly stopped. We don't know why. Perhaps he realized that the list was too long.", 'target': 'Is Jimmy certain that the list was too long?', 'list': 3},
      {'item_no': 't20', 'block': 2, 'condition': 'c', 'context': "Emma said: One of my friends has a terrible case of halitosis: the stench coming out of his mouth is just horrible. We told him but he still won't brush his teeth. Recently, our teacher won't come close to him anymore. Perhaps she noticed that he had bad breath", 'target': 'Is Emma certain that her friend had bad breath?', 'list': 3},
      {'item_no': 't23', 'block': 2, 'condition': 'nc', 'context': "Eleanor said: Our company was searching for a new human resources manager. The first resume that arrived was from a really well-qualified guy. We were completely baffled when our CEO immediately rejected him, and she didn't want to tell us why. Perhaps she was aware that he was a terrible administrator.", 'target': 'Is Eleanor certain that the guy was a terrible administrator?', 'list': 3}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
    Routine trial_certainty
  LoopTerminator trials_block2
  Routine demographics
