PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=16A7637A
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  expName = expectedness
  keyboardBackend = ioHub
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Routines
  Routine demographics
    ImageComponent logo7
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_4
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHICS
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    TextComponent age
      letterHeight = 0.03
      pos = (-0.3, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your age:
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    TextboxComponent age_enter
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0
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    TextComponent gender
      letterHeight = 0.03
      pos = (-0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your gender:
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    SliderComponent gender_slider
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 1
      labels = "female", "male", "non-binary", "other"
      letterHeight = 0.03
      pos = (0.3, 0.1)
      saveStartStop = False
      size = (0.4, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent native_lang
      letterHeight = 0.03
      pos = (-0.4, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Native language(s) (spoken at home
        when you were a child):
    TextboxComponent lang_enter
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0
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    TextboxComponent finish_comment
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      text = After clicking on "Back to Prolific", you will have to click "ok" one more time in order to be redirected to Prolific.
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    TextboxComponent continue4
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.35,0.04)
      startVal [time (s)] = 0.0
      text = Back to Prolific
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    MouseComponent mouse_3
      clickable = continue4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    ImageComponent logo1
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to our study!
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    TextboxComponent introduction
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.9, 0.2)
      startVal [time (s)] = 0.0
      text = The goal of this study is to investigate how humans understand English utterances. The study consists of three parts. In each part, you will read the same  3-sentence statement by a speaker. Here is an example:
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    TextboxComponent introduction_2
      anchor = top-center
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.18)
      saveStartStop = False
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      text = Phil said: I went shopping last Tuesday. I had a day off from work. I bought lots of beautiful things.
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    TextboxComponent introduction_3
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
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      text:
        In part 1, we are interested in understanding what the speaker might say in the next sentence (e.g., Phil might say next what else he did on his day off). We will make a proposal and ask you to rate how expected that proposal is.

        In part 2, you will see the statement again, but we will show you what the speaker actually said next. Phil, for instance, said next: "My favorite piece was a blue fake leather jacket." We will ask you a question about what the speaker is certain about, e.g., "Is Phil certain that the leather jacket is fake?".

        In part 3, we will ask you to explain your judgment to us.

        At the end of the study, we will ask you for your demographic information. Please pay close attention during your participation! The study should take approximately 4 minutes.
    TextboxComponent continue1
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse
      clickable = continue1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent
    ImageComponent logo2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONSENT
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    TextboxComponent consent_text
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      saveStartStop = False
      size = (0.9, 1)
      startVal [time (s)] = 0.0
      text = By clicking on the "I want to participate"-button below you agree to participate in this study, which is conducted by researchers at the University of Stuttgart. You may withdraw from this study at any time without penalty or loss of benefits, including loss or reduction of payment. If you do withdraw from the study before the end, please contact the researchers for information on how to collect payment (swantje.toennis@ling.uni-stuttgart.de). The data collected will be anonymous and confidential. You give permission for your data from this study to be shared with other researchers. If you have any questions, you may contact the requester through Prolific's platform or via email (swantje.toennis@ling.uni-stuttgart.de). 
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    TextboxComponent continue2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.45,0.04)
      startVal [time (s)] = 0.0
      text = I want to participate
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    MouseComponent mouse_consent
      clickable = continue2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block2
    ImageComponent logo5
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 2 of the study!
    TextboxComponent intro_block2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read the girl's statement and what she said next. You will evaluate whether the girl is certain about something.
        Click "Continue" to start part 2 of the study.
    TextboxComponent continue6
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_5
      clickable = continue6
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial_certainty
    TextboxComponent read_context
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read again what the girl said and what she said next:
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    TextboxComponent textbox_4
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
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    TextboxComponent task1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $certainty
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    SliderComponent certainty_rate
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("no","yes")
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3_4
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_7
      clickable = continue3_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial_expectedness
    TextboxComponent read_context_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = One girl says:
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
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    TextComponent text2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What do you expect that the girl's next sentence will be about? Rate the following proposal by adjusting the slider.
    TextComponent proposal
      letterHeight = 0.03
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Q_cc
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    SliderComponent exp
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.19)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_2
      clickable = continue3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block1
    ImageComponent logo3
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 1 of the study!
    TextboxComponent intro_block2_2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read a statement by a speaker, and you will indicate what you expect that speaker to say in the next sentence.
        Click "Continue" to start the experiment.
    TextboxComponent continue6_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_9
      clickable = continue6_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions2
    ImageComponent logo1_3
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextboxComponent introduction_5
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      saveStartStop = False
      size = (0.9, 1)
      startVal [time (s)] = 0.0
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      text:
        Before you answer our questions, imagine the following scenario for this study:

        You are at a party and have just gotten into the kitchen to get yourself a drink. While you search for a cup and something you would like to drink, you overhear a conversation by a couple of people behind you. They know each other well and meet regularly. You have seen them at other parties but never talked to them.
    TextboxComponent continue1_3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_6
      clickable = continue1_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine explanation
    TextComponent heading
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Here is the example from part 1 again:
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    TextboxComponent prev_trial
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.25)
      saveStartStop = False
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = It's so curious! Nobody knows where Sue's boyfriend Tom is every Monday. Just now I saw Sue yelling at Tom, so she seems to have figured it out and I also have an idea now.
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    TextComponent Heading_2
      letterHeight = 0.03
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please explain to us how you decided whether our proposal that the next sentence is about where Tom is every Monday was more or less expected.
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    TextboxComponent explanation_enter
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1, 0.25)
      startVal [time (s)] = 0
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    TextboxComponent continue2_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_consent_2
      clickable = continue2_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block3
    ImageComponent logo5_2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 3 of the study!
    TextboxComponent intro_block2_3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read the girl's statement again and will be asked to explain your judgment from part 1.
        Click "Continue" to start part 3 of the study.
    TextboxComponent continue6_3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_8
      clickable = continue6_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine consent
  Routine block1
  Routine instructions2
  LoopInitiator trials_block1 loopType="TrialHandler"
    conditions = [{'condition': 'not-at-issue', 'context': "I'm so upset! We all know where Sue's boyfriend Tom is every Monday, only Sue doesn't. But lately she seems to be angry with Tom, that bastard.", 'Q_cc': 'about where Tom is every Monday', 'list': 1, 'block': 1}]
    conditionsFile = input1.xlsx
    loopType = random
    nReps = 1
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    Routine trial_expectedness
  LoopTerminator trials_block1
  Routine block2
  LoopInitiator trials_block2 loopType="TrialHandler"
    conditions = [{'condition': 'not-at-issue', 'context': "I'm so upset! We all know where Sue's boyfriend Tom is every Monday, only Sue doesn't. But lately she seems to be angry with Tom, that bastard. Maybe she discovered that he's at Mary's every Monday.", 'certainty': "Is the girl certain that Tom is at Mary's every Monday?", 'list': 1, 'block': 2}]
    conditionsFile = input2.xlsx
    loopType = random
    nReps = 1
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    Routine trial_certainty
  LoopTerminator trials_block2
  Routine block3
  Routine explanation
  Routine demographics
