PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=16A7637A
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = aboutness
  keyboardBackend = ioHub
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Routines
  Routine demographics
    ImageComponent logo7
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_4
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHICS
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    TextComponent age
      letterHeight = 0.03
      pos = (-0.3, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your age:
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    TextboxComponent age_enter
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0
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    TextComponent gender
      letterHeight = 0.03
      pos = (-0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your gender:
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    SliderComponent gender_slider
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 1
      labels = "female", "male", "non-binary", "other"
      letterHeight = 0.03
      pos = (0.3, 0.1)
      saveStartStop = False
      size = (0.4, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent native_lang
      letterHeight = 0.03
      pos = (-0.4, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Native language(s) (spoken at home
        when you were a child):
    TextboxComponent lang_enter
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0
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    TextboxComponent finish_comment
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      text = After clicking on "Back to Prolific", you will have to click "ok" one more time in order to be redirected to Prolific.
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    TextboxComponent continue4
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.35,0.04)
      startVal [time (s)] = 0.0
      text = Back to Prolific
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    MouseComponent mouse_3
      clickable = continue4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_trial1
    ImageComponent logo4
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_3
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRACTICE
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    TextComponent text2_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What do you expect that the next sentence will be about? Rate the following proposals by adjusting the sliders.
    TextboxComponent read_context_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.32)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box.
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    TextboxComponent textbox_2
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.17)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text = Julia said: Kim was at the party yesterday.
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    TextComponent proposal1_3
      letterHeight = 0.03
      pos = (0, -0.08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = about when Kim left the party
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    SliderComponent exp_rate1_2
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.14)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextComponent proposal2_2
      letterHeight = 0.03
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = about when the party started
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    SliderComponent exp_rate2_2
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.31)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.47,0.035)
      startVal [time (s)] = 0.0
      text = Continue to part 1 of the study
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    MouseComponent mouse_4
      clickable = continue3_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    ImageComponent logo1_2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_instr_2
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to our study!
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    TextboxComponent introduction_4
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.9, 0.2)
      startVal [time (s)] = 0.0
      text = The goal of this study is to investigate how humans understand English utterances. The study consists of two parts. In both parts, you will read one statement by a speaker. Here is an example:
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    TextboxComponent introduction_5
      anchor = top-center
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.18)
      saveStartStop = False
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      text = Phil said: I went shopping last Tuesday.
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    TextboxComponent introduction_6
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
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      text:
        In part 1, we are interested in understanding what the speaker might say next (e.g., Phil might talk about the things he bought). We will make 2 proposals and ask you to rate how expected they are.

        In part 2, you will see the statement again, but we will show 2 sentences the speaker could say next. Phil, for instance, could say next: "I bought a blue fake leather jacket." We will ask you which of the 2 sentences you prefer as a continuation of Phil's statement.

        Each part will start with one practice trial to get you acquainted with the procedure. At the end of the study, we will ask you for your demographic information. Please pay close attention during your participation! The study should take approximately 2 minutes.
    TextboxComponent continue1_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_6
      clickable = continue1_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent
    ImageComponent logo2_2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent Heading_2
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONSENT
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    TextboxComponent consent_text_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      saveStartStop = False
      size = (0.9, 1)
      startVal [time (s)] = 0.0
      text = By clicking on the "I want to participate"-button below you agree to participate in this study, which is conducted by researchers at the University of Stuttgart. You may withdraw from this study at any time without penalty or loss of benefits, including loss or reduction of payment. If you do withdraw from the study before the end, please contact the researchers for information on how to collect payment (swantje.toennis@ling.uni-stuttgart.de). The data collected will be anonymous and confidential. You give permission for your data from this study to be shared with other researchers. If you have any questions, you may contact the requester through Prolific's platform or via email (swantje.toennis@ling.uni-stuttgart.de). 
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    TextboxComponent continue2_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.45,0.04)
      startVal [time (s)] = 0.0
      text = I want to participate
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    MouseComponent mouse_consent_2
      clickable = continue2_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block1
    ImageComponent logo3_2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 1 of the study!
    TextboxComponent intro_block2_3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read a statement by a speaker and will indicate what you expect her/him to say  in the next sentence.
        Click "Continue" to go through a practice trial.
    TextboxComponent continue6_3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse
      clickable = continue6_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block2
    ImageComponent logo5_2
      image = logo.png
      pos = (0.5, 0.4)
      saveStartStop = False
      size = (0.4, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are now entering part 2 of the study!
    TextboxComponent intro_block2_2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Remember: In this part you will read the same statement from the previous part again. We will present two continuations for the statement (marked with A and B), and we will ask you to tell us which one you prefer and how strongly.
        Click "Continue" to go through a practice trial.
    TextboxComponent continue6_2
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_9
      clickable = continue6_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial_exp
    CodeComponent code_randomize
      Code Type = Both
      Begin Experiment:
        import random, copy
        from random import randint
        from decimal import *

        #create list of positions for proposal text:
        master_positions=[[0,-0.08],[0,-0.25]]
        positions = copy.deepcopy(master_positions)
      Begin JS Experiment:
        master_positions = [].concat(Array(1).fill([0, (- 0.08)]), Array(1).fill([0, (- 0.25)]));
      Begin JS Routine:
        positions = master_positions;
        util.shuffle(positions);
      Begin Routine:
        # reset 'positions'
        positions = master_positions

        #randomise this for each trial
        random.shuffle(positions)

        #pair text and slider positions
        #slider_position = (positions + [0,-0.04])
      End JS Routine:
        psychoJS.experiment.addData("position_prop", positions);
      End Routine:
        thisExp.addData('position_prop', positions)
    TextboxComponent read_context_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box. 
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
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    TextComponent text2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What do you expect that the next sentence will be about? Rate the following proposals by adjusting the sliders.
    TextComponent proposal1
      letterHeight = 0.03
      pos [set every repeat] = $positions[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Q_ai
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    SliderComponent exp1
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.14)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextComponent proposal2
      letterHeight = 0.03
      pos [set every repeat] = $positions[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Q_nai
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    SliderComponent exp2
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("very unexpected","very expected")
      letterHeight = 0.025
      pos = (0, -0.31)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,1)
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    TextboxComponent continue3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_2
      clickable = continue3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial_preference
    CodeComponent code_randomize_2
      Code Type = Both
      Begin Experiment:
        import random, copy
        from random import randint
        from decimal import *

        #create list of positions for proposal text:
        master_positions2=[[0,0],[0,-0.1]]
        positions2 = copy.deepcopy(master_positions2)
      Begin JS Experiment:
        master_positions2 = [].concat(Array(1).fill([0, 0]), Array(1).fill([0, (- 0.1)]));
      Begin JS Routine:
        positions2 = master_positions2;
        util.shuffle(positions2);
      Begin Routine:
        # reset 'positions'
        positions2 = master_positions2

        #randomise this for each trial
        random.shuffle(positions2)

        #pair text and slider positions
        #slider_position = (positions + [0,-0.04])
      End JS Routine:
        psychoJS.experiment.addData("position_prop2", positions2);
      End Routine:
        thisExp.addData('position_prop2', positions2)
    TextboxComponent read_context
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box. 
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    TextboxComponent textbox_3
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.25)
      saveStartStop = False
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
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    TextComponent text2_3
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Which out of sentence A and B do you prefer as the next sentence of Emma's statement?
    TextboxComponent A
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      text = A
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    TextboxComponent cont_mc
      alignment = center-left
      bold = False
      borderColor = 0.0000, 0.0000, 0.0000
      borderWidth = 0
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      pos [set every repeat] = $positions2[0]
      saveStartStop = False
      size = (0.9, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mc
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    TextboxComponent B
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (-0.5, -0.1)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      text = B
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    TextboxComponent cont_rc
      alignment = center-left
      bold = False
      borderColor = 0.0000, 0.0000, 0.0000
      borderWidth = 0
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1
      pos [set every repeat] = $positions2[1]
      saveStartStop = False
      size = (0.9, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rc
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    SliderComponent pref
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = ("A much better", "both equally good", "B much better")
      letterHeight = 0.025
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (-1,0,1)
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    TextboxComponent continue3_3
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.17,0.035)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_5
      clickable = continue3_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_trial2
    TextboxComponent read_context_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      size = (1., 0.05)
      startVal [time (s)] = 0.0
      text = Read the statement in the box. 
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    TextboxComponent textbox_4
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (0, 0.25)
      saveStartStop = False
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = George said: Before the movie started Alice kissed Bob.
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    TextComponent text2_4
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Which out of sentence A and B do you prefer as the next sentence of George's statement?
    TextboxComponent A_2
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      text = A
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    TextboxComponent cont_mc_2
      alignment = center-left
      bold = False
      borderColor = 0.0000, 0.0000, 0.0000
      borderWidth = 0
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      saveStartStop = False
      size = (0.9, 0.05)
      startVal [time (s)] = 0.0
      text = Afterwards Bob kissed Alice.
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    TextboxComponent B_2
      alignment = center-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1.2
      padding = 0.02
      pos = (-0.5, -0.1)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      text = B
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    TextboxComponent cont_rc_2
      alignment = center-left
      bold = False
      borderColor = 0.0000, 0.0000, 0.0000
      borderWidth = 0
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      lineSpacing = 1
      pos = (0,-0.1)
      saveStartStop = False
      size = (0.9, 0.05)
      startVal [time (s)] = 0.0
      text = Afterwards Alice kissed Bob.
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    SliderComponent pref_2
      color = White
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = ("A much better", "both equally good", "B much better")
      letterHeight = 0.025
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0,0.5,1)
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    TextboxComponent continue3_5
      bold = False
      borderColor = -1.0000, 0.0039, -1.0000
      borderWidth = 4
      color = -1.0000, 0.0039, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      size = (0.47,0.035)
      startVal [time (s)] = 0.0
      text = Continue to part 2 of the study
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    MouseComponent mouse_7
      clickable = continue3_5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine consent
  Routine block1
  Routine practice_trial1
  LoopInitiator trials_block1 loopType="TrialHandler"
    conditions = [{'item': 't1', 'context': 'Emma said: Mary wants to cook something that Peter likes and something that Donald likes.', 'Q_ai': 'about where Peter is', 'Q_nai': 'about what food Peter likes', 'list': 1, 'block': 1}]
    conditionsFile = input1.xlsx
    loopType = random
    nReps = 1
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    Routine trial_exp
  LoopTerminator trials_block1
  Routine block2
  Routine practice_trial2
  LoopInitiator trials_block2 loopType="TrialHandler"
    conditions = [{'item': 't1', 'context': 'Emma said: Mary wants to cook something that Peter likes and something that Donald likes.', 'mc': 'Peter, who likes pizza, is at the music store.', 'rc': 'Peter, who is at the music store, likes pizza.', 'list': 1, 'block': 2}]
    conditionsFile = input2.xlsx
    loopType = random
    nReps = 1
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    Routine trial_preference
  LoopTerminator trials_block2
  Routine demographics
